PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1500, 1000]
  color = 0.0000, 0.0000, 0.0000
  expName = Test1
  keyboardBackend = ioHub
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Routines
  Routine test_2
    RoutineSettingsComponent test_2
      skipIf = (buttont2 == False) or (lose == True)
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    ImageComponent earth2
      image = earth.jpeg
      pos = game_back_pos
      size = game_back_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test1
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    PolygonComponent boxL2_1
      fillColor = None
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 5
      pos = (0.1, 0)
      shape = rectangle
      size = box_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test2
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    ImageComponent shipL2_1
      image = spaceship.jpeg
      pos = (0.1, 0)
      size = ship_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test2
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    PolygonComponent boxL2_2
      fillColor = None
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 5
      pos = (0.35, 0)
      shape = rectangle
      size = box_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test2
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    ImageComponent shipL2_2
      image = spaceship.jpeg
      pos = (0.35, 0)
      size = ship_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test2
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    PolygonComponent boxL2_3
      fillColor = None
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 5
      pos = (0.6, 0)
      shape = rectangle
      size = box_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test2
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    ImageComponent shipL2_3
      image = spaceship.jpeg
      pos = (0.6, 0)
      size = ship_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test2
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    TextComponent Attack_message2
      letterHeight = 0.045
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test1
      text = Focus on the attacking RED alien ship to stop it!!!
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    TextComponent test_2_mess
      letterHeight = 0.035
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test2
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    CodeComponent test_2_code
      Code Type = Py
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      Begin Routine:
        if buttont2 == True and lose == False:
            #Start aquiring data
            band_collector.start_test(dur_test2)

        #Target object for user to look at for each trial
        targets = [1, 2, 3, 1, 1,
                   1, 1, 1, 1, 1]

        # Frequencies for each object for every trial
        freq_trials = [[7, 3 , 15 ], #Trial 1 frequencies
                       [7 , 10 , 15], #Trial 2 frequencies
                       [2 , 5 , 2 ], #Trial 3 frequencies
                       [6 , 4 , 30], #Trial 4 frequencies
                       [8 , 6 , 7 ], #Trial 5 frequencies
                       [10, 20, 30], #Trial 6 frequencies
                       [1 , 2 , 30], #Trial 7 frequencies
                       [1 , 20, 3 ], #Trial 8 frequencies
                       [10, 2 , 3 ], #Trial 9 frequencies
                       [10 ,10 ,10 ]] #Trial 10 frequencies

        #Select frequencies for current trial
        freq_curr_trial = freq_trials[trials_2.thisN]

        #All objects
        objects = [boxL2_1, boxL2_2, boxL2_3]

        #Select target object for user to look at
        selectTarget(objects, targets[trials_2.thisN])

        test_2_mess.text = 'Level 2, Round ' + str(trials_2.thisN + 1)

        setFreqText(t2_freq, freq_curr_trial, targets[trials_2.thisN] - 1, objects)
      Each Frame:
        #Flicker objects at set frequencies
        flickerObjects(objects, freq_curr_trial, frameN)
      End Routine:
        if buttont2 == True and lose == False:
            EEGdata = band_collector.getEEGData()
            lose = not compareFreq(EEGdata, freq_curr_trial[targets[trials_2.thisN] - 1])
    TextComponent t2_freq
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test2
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  Routine test
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  Routine GoodBye
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Game has timed out
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  Routine test_1
    RoutineSettingsComponent test_1
      skipIf = (buttont1 == False) or (lose == True)
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    ImageComponent earth1
      image = earth.jpeg
      pos = game_back_pos
      size = game_back_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test1
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    PolygonComponent boxL1_1
      fillColor = None
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 5
      pos = (0.35, 0)
      shape = rectangle
      size = box_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test1
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    ImageComponent shipL1_1
      image = spaceship.jpeg
      pos = (0.35, 0)
      size = ship_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test1
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    TextComponent Attack_message
      letterHeight = 0.045
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test1
      text = Focus on the attacking RED alien ship to stop it!!!
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    TextComponent test_1_mess
      letterHeight = 0.035
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test1
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    CodeComponent test_1_code
      Code Type = Py
      Begin Routine:
        if buttont1 == True and lose == False:
            #Start aquiring data
            band_collector.start_test(dur_test1)

        # Frequencies for each trial
        freq_trials = [[1], #Trial 1 frequency
                    [11],   #Trial 2 frequency
                    [15],  #Trial 3 frequency
                    [7],  #Trial 4 frequency
                    [5],  #Trial 5 frequency
                    [8],  #Trial 6 frequency
                    [15],  #Trial 7 frequency
                    [15],  #Trial 8 frequency
                    [15],  #Trial 9 frequency
                    [15]]  #Trial 10 frequency

        loop_num = trials_1.thisN
        #Select frequencies for current trial
        freq_curr_trial = freq_trials[loop_num]

        #Target object for user to look at for each trial
        targets = [1, 1, 1, 1, 1,
                   1, 1, 1, 1, 1]

        #All objects
        objects = [boxL1_1]

        #Select target object for user to look at
        selectTarget(objects, targets[loop_num])

        test_1_mess.text = 'Level 1, Round ' + str(loop_num + 1)

        setFreqText(t1_freq, freq_curr_trial, targets[trials_1.thisN] - 1, objects)
      Each Frame:
        #Flicker objects at set frequencies
        flickerObjects(objects, freq_curr_trial, frameN)
      End Routine:
        #Only run code if this test was activated
        if buttont1 == True and lose == False:
            #Receive band powers
            EEGdata = band_collector.getEEGData()
            #Check if user has lost
            lose = not compareFreq(EEGdata, freq_curr_trial[targets[trials_1.thisN] - 1])
    TextComponent t1_freq
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test1
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  Routine test_3
    RoutineSettingsComponent test_3
      skipIf = (buttont3 == False) or (lose == True)
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    ImageComponent earth3
      image = earth.jpeg
      pos = game_back_pos
      size = game_back_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test1
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    PolygonComponent boxL3_1
      fillColor = None
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 5
      pos = (0.1, 0.25)
      shape = rectangle
      size = box_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test3
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    ImageComponent shipL3_1
      image = spaceship.jpeg
      pos = (0.1, 0.25)
      size = ship_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test3
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    PolygonComponent boxL3_2
      fillColor = None
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 5
      pos = (0.6, 0.25)
      shape = rectangle
      size = box_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test3
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    ImageComponent shipL3_2
      image = spaceship.jpeg
      pos = (0.6, 0.25)
      size = ship_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test3
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    PolygonComponent boxL3_3
      fillColor = None
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 5
      pos = (0.1, -0.25)
      shape = rectangle
      size = box_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test3
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    ImageComponent shipL3_3
      image = spaceship.jpeg
      pos = (0.1, -0.25)
      size = ship_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test3
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    PolygonComponent boxL3_4
      fillColor = None
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 5
      pos = (0.6, -0.25)
      shape = rectangle
      size = box_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test3
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    ImageComponent shipL3_4
      image = spaceship.jpeg
      pos = (0.6, -0.25)
      size = ship_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test3
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    TextComponent Attack_message3
      letterHeight = 0.045
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test1
      text = Focus on the attacking RED alien ship to stop it!!!
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    TextComponent test_3_mess
      letterHeight = 0.035
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test3
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    CodeComponent test_3_code
      Code Type = Py
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      Begin Routine:
        if buttont3 == True and lose == False:
            #Start aquiring data
            band_collector.start_test(dur_test3)

        #Target object for user to look at for each trial
        targets = [4, 1, 3, 4, 1,
                   1, 1, 1, 1, 1]

        # Frequencies for each object for every trial
        freq_trials = [[3, 7,
                        10, 20], #Trial 1 frequencies
                       [10, 7,
                        9, 15], #Trial 2 frequencies
                       [9, 10,
                        20, 12], #Trial 3 frequencies
                       [10, 5,
                        2, 15], #Trial 4 frequencies
                       [10, 5,
                        2, 15], #Trial 5 frequencies
                       [10, 5,
                       2, 15], #Trial 6 frequencies
                       [10, 5,
                        2, 15], #Trial 7 frequencies
                       [10, 5,
                        2, 15], #Trial 8 frequencies
                       [10, 5,
                        2, 15], #Trial 9 frequencies
                       [10, 5,
                        2, 15]] #Trial 10 frequencies

        #Select frequencies for current trial
        freq_curr_trial = freq_trials[trials_3.thisN]

        #All objects
        objects = [boxL3_1, boxL3_2, boxL3_3, boxL3_4]

        #Select target object for user to look at
        selectTarget(objects, targets[trials_3.thisN])

        test_3_mess.text = 'Level 3, Round ' + str(trials_3.thisN + 1)

        setFreqText(t3_freq, freq_curr_trial, targets[trials_3.thisN] - 1, objects)
      Each Frame:
        #Flicker objects at set frequencies
        flickerObjects(objects, freq_curr_trial, frameN)
      End Routine:
        if buttont3 == True and lose == False:
            EEGdata = band_collector.getEEGData()
            lose = not compareFreq(EEGdata, freq_curr_trial[targets[trials_3.thisN] - 1])
    TextComponent t3_freq
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test3
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  Routine test_4
    RoutineSettingsComponent test_4
      skipIf = (buttont4 == False) or (lose == True)
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    ImageComponent earth4
      image = earth.jpeg
      pos = game_back_pos
      size = game_back_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test1
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    PolygonComponent boxL4_1
      fillColor = None
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 5
      pos = (0.1, 0.25)
      shape = rectangle
      size = box_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test4
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    ImageComponent shipL4_1
      image = spaceship.jpeg
      pos = (0.1, 0.25)
      size = ship_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test4
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    PolygonComponent boxL4_2
      fillColor = None
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 5
      pos = (0.35, 0.25)
      shape = rectangle
      size = box_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test4
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    ImageComponent shipL4_2
      image = spaceship.jpeg
      pos = (0.35, 0.25)
      size = ship_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test4
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    PolygonComponent boxL4_3
      fillColor = None
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 5
      pos = (0.6, 0.25)
      shape = rectangle
      size = box_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test4
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    ImageComponent shipL4_3
      image = spaceship.jpeg
      pos = (0.6, 0.25)
      size = ship_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test4
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    PolygonComponent boxL4_4
      fillColor = None
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 5
      pos = (0.1, 0)
      shape = rectangle
      size = box_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test4
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    ImageComponent shipL4_4
      image = spaceship.jpeg
      pos = (0.1, 0)
      size = ship_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test4
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    PolygonComponent boxL4_5
      fillColor = None
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 5
      pos = (0.35, 0)
      shape = rectangle
      size = box_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test4
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    ImageComponent shipL4_5
      image = spaceship.jpeg
      pos = (0.35, 0)
      size = ship_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test4
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    PolygonComponent boxL4_6
      fillColor = None
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 5
      pos = (0.6, 0)
      shape = rectangle
      size = box_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test4
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    ImageComponent shipL4_6
      image = spaceship.jpeg
      pos = (0.6, 0)
      size = ship_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test4
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    PolygonComponent boxL4_7
      fillColor = None
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 5
      pos = (0.1, -0.25)
      shape = rectangle
      size = box_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test4
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    ImageComponent shipL4_7
      image = spaceship.jpeg
      pos = (0.1, -0.25)
      size = ship_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test4
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    PolygonComponent boxL4_8
      fillColor = None
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 5
      pos = (0.35, -0.25)
      shape = rectangle
      size = box_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test4
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    ImageComponent shipL4_8
      image = spaceship.jpeg
      pos = (0.35, -0.25)
      size = ship_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test4
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    PolygonComponent boxL4_9
      fillColor = None
      lineColor = 1.0000, -1.0000, -1.0000
      lineWidth = 5
      pos = (0.6, -0.25)
      shape = rectangle
      size = box_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test4
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    ImageComponent shipL4_9
      image = spaceship.jpeg
      pos = (0.6, -0.25)
      size = ship_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test4
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    TextComponent Attack_message4
      letterHeight = 0.045
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test1
      text = Focus on the attacking RED alien ship to stop it!!!
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    TextComponent test_4_mess
      letterHeight = 0.035
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test4
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    CodeComponent test_4_code
      Code Type = Py
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      Begin Routine:
        if buttont4 == True and lose == False:
            #Start aquiring data
            band_collector.start_test(dur_test4)

        #Target object for user to look at for each trial
        targets = [2, 8, 3, 4, 5,
                   6, 7, 8, 9, 1]

        # Frequencies for each object
        freq_trials = [[10, 9, 2,
                        1, 8, 12,
                        20, 25, 30],#Trial 1 frequencies
                        [10, 5, 2,
                        1, 8, 12,
                        25, 20, 30], #Trial 2 frequencies
                        [10, 5, 2,
                        1, 8, 12,
                        20, 25, 30], #Trial 3 frequencies
                        [10, 5, 2,
                        1, 8, 12,
                        20, 25, 30], #Trial 4 frequencies
                        [10, 5, 2,
                        1, 8, 12,
                        20, 25, 30], #Trial 5 frequencies
                        [10, 5, 2,
                        1, 8, 12,
                        20, 25, 30], #Trial 6 frequencies
                        [10, 5, 2,
                        1, 8, 12,
                        20, 25, 30], #Trial 7 frequencies
                        [10, 5, 2,
                        1, 8, 12,
                        20, 25, 30], #Trial 8 frequencies
                        [10, 5, 2,
                        1, 8, 12,
                        20, 25, 30], #Trial 9 frequencies
                       [10, 5, 2,
                        1, 8, 12,
                        20, 25, 30]] #Trial 10 frequencies

        #All objects
        objects = [boxL4_1, boxL4_2, boxL4_3,
                   boxL4_4, boxL4_5, boxL4_6,
                   boxL4_7, boxL4_8, boxL4_9]

        #Select frequencies for current trial
        freq_curr_trial = freq_trials[trials_4.thisN]

        #Select target object for user to look at
        selectTarget(objects, targets[trials_4.thisN])

        test_4_mess.text = 'Level 4, Round ' + str(trials_4.thisN + 1)

        setFreqText(t4_freq, freq_curr_trial, targets[trials_4.thisN] - 1, objects)
      Each Frame:
        #Flicker objects at set frequencies
        flickerObjects(objects, freq_curr_trial, frameN)
      End Routine:
        if buttont4 == True and lose == False:
            EEGdata = band_collector.getEEGData()
            lose = not compareFreq(EEGdata, freq_curr_trial[targets[trials_4.thisN] - 1])
    TextComponent t4_freq
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_test4
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  Routine PickTest
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    MovieComponent brain_animation
      backend = ffpyplayer
      forceEndRoutine = False
      loop = True
      movie = brain_animation.mp4
      size = pickTest_back_size
      startVal [time (s)] = 0.0
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    ButtonComponent button_t1
      bold = True
      borderColor = 0.0902, -1.0000, 0.0902
      borderWidth = 2
      callback = buttont1 = True
      color = black
      fillColor = -0.1686, -0.2941, 0.6078
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (-0.25, 0.25)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      text = Level 1
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    ButtonComponent button_t2
      bold = True
      borderColor = 0.0902, -1.0000, 0.0902
      borderWidth = 2
      callback = buttont2 = True
      color = black
      fillColor = -0.1686, -0.2941, 0.6078
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (0.25, 0.25)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      text = Level 2
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    ButtonComponent button_t3
      bold = True
      borderColor = 0.0902, -1.0000, 0.0902
      borderWidth = 2
      callback = buttont3 = True
      color = black
      fillColor = -0.1686, -0.2941, 0.6078
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (-0.25, -0.25)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      text = Level 3
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    ButtonComponent button_t4
      bold = True
      borderColor = 0.0902, -1.0000, 0.0902
      borderWidth = 2
      callback = buttont4= True
      color = black
      fillColor = -0.1686, -0.2941, 0.6078
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (0.25, -0.25)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      text = Level 4
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    ButtonComponent button_all
      bold = True
      borderColor = -0.1686, -0.2941, 0.6078
      borderWidth = 2
      color = black
      fillColor = 0.0902, -1.0000, 0.0902
      forceEndRoutine = True
      letterHeight = 0.038
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      text = All
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      callback:
        buttont1 = True
        buttont2= True
        buttont3= True
        buttont4= True
    ButtonComponent home_button
      bold = True
      borderColor = -0.1686, -0.2941, 0.6078
      borderWidth = 1
      callback = homeButton = True
      color = -1.0000, -1.0000, -1.0000
      fillColor = 0.0902, -1.0000, 0.0902
      forceEndRoutine = True
      letterHeight = 0.025
      pos = (0.67, -0.45)
      size = (0.125, 0.065)
      startVal [time (s)] = 0
      text = Home
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    TextComponent text
      color = 1.0000, 1.0000, 1.0000
      font = Open Sans 
      letterHeight = 0.06
      pos = (0, 0.43)
      startVal [time (s)] = 0
      text = Choose a level
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    CodeComponent code_5
      Code Type = Py
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      Begin Routine:
        text.bold = True
        lose = False
        homeButton = False
        newSession = False #Do not show main menu again unless home button is clicked
  Routine blank1s_t2
    RoutineSettingsComponent blank1s_t2
      skipIf = button2 == False
      stopVal [duration (s)] = 1
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      desc:
        Turn Screen Blank for 1 second
    TextComponent blank_screen_t2_mess
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine blank1s_t3
    RoutineSettingsComponent blank1s_t3
      skipIf = button3 ==  False
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    TextComponent blank_screen_t3_mess
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine blank1s_t4
    RoutineSettingsComponent blank1s_t4
      skipIf = button4 ==  False
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    TextComponent blank_screen_t4_mess
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine button2_false
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    CodeComponent code_3
      Code Type = Auto->JS
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      Before Experiment:
        global button2
        button2 = False
  Routine button3_false
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    CodeComponent code_4
      Code Type = Auto->JS
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      Before Experiment:
        global button2
        button3= False
  Routine reset_buttons
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    CodeComponent reset_button_bool
      Code Type = Py
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      Begin Routine:
        #Reset buttons
        buttont1 = False
        buttont2 = False
        buttont3 = False
        buttont4 = False
        start_exp_button = False
        about_exp_button = False
  Routine GlobalFunctions
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    CodeComponent code
      Code Type = Py
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      Before Experiment:
        import collecting_bands
        import threading
        import numpy as np

        #Update display to show target object
        def selectTarget(objects, target):
            # If false only the border of target is shown. This looks better but is harder to detect the frequency
            target_fill = True
            for i in range(len(objects)):
                if target_fill == True:
                    if i == (target - 1): #The target
                        objects[i].fillColor = 'red'
                        objects[i].lineColor = 'red'
                    else:
                        objects[i].fillColor = 'white'
                        objects[i].lineColor = 'white'
                else:
                    if i == (target - 1):
                        objects[i].lineColor = 'red'
                    else:
                        objects[i].lineColor = 'white'

        # Update opacities based on current frame number for each stimulus
        def flickerObjects(objects, freqs, frameN):
            refresh_rate = 60
            for i in range(len(objects)): #loop through all objects
                frames_per_cycle = refresh_rate // freqs[i]
                objects[i].opacity = (((frameN) % frames_per_cycle) < (frames_per_cycle / 2))

        #Check if frequency is correct range
        def compareFreq(EEGdata, freq):
            DELTA = 0
            THETA = 1
            ALPHA = 2
            BETA = 3
            GAMMA = 4

            #freq_band = np.argmax(EEGdata)
            filtered_EEG = theta_beta_pass(EEGdata) #Filter out delta and gamma bands
            freq_band = np.argmax(filtered_EEG)

            #Allow uncertainty ranges to compensate for noise and baseline band powers.
            #A more sophisticated algorithm will be needed to perfect this function
            if((EEGdata[1] / EEGdata[3] >= 0.75) and (5 <= freq < 9)):
                return True
            if((EEGdata[1] / EEGdata[2] <= 1.5) and (9 <= freq < 13)):
                return True
            if((EEGdata[2] / EEGdata[3] <= 1.5) and (13 <= freq < 32)):
                return True

            if (freq_band == DELTA) and (0 <= freq < 5):
                return True
            elif (freq_band == THETA) and (5 <= freq < 9):
                return True
            elif (freq_band == ALPHA) and (9 <= freq < 13):
                return True
            elif (freq_band == BETA) and (13 <= freq < 32):
                return True
            elif (freq_band == GAMMA) and (freq >= 32):
                return True
            else:
                return False

        #We cannot create these frequencies accurately in the brain yet
        def theta_beta_pass(data):
            band_pass = data
            band_pass[0] = 0
            band_pass[4] = 0
            return band_pass

        #Display freq above the target
        def setFreqText(disp, freqs, target, objects):
            disp.text = str(freqs[target]) + "Hz"
            x = objects[target].pos[0]
            y = objects[target].pos[1] + 0.1
            disp.pos = (x, y)
      Begin Experiment:
        #Set number of repetitions  for each test
        global_rep_num = 10
        rep_num1 = global_rep_num
        rep_num2 = global_rep_num
        rep_num3 = global_rep_num
        rep_num4 = global_rep_num

        #Set number of trials for each test
        global_trial_num = 10
        trial_num1 = global_trial_num
        trial_num2 = global_trial_num
        trial_num3 = global_trial_num
        trial_num4 = global_trial_num

        #Set duration of repetitions for each test
        global_dur_test = 5
        dur_test1 = global_dur_test
        dur_test2 = global_dur_test
        dur_test3 = global_dur_test
        dur_test4 = global_dur_test

        #Duration after a repetition
        dur_blank = 2
        #Duration of win/lose screens
        dur_end = 3

        if (win.size[0] / win.size[1]) == 1.5: #Orientation normally used
            #Size/position of display objects including ship, target boxes and backgrounds
            ship_size = (0.15, 0.15)
            box_size = (0.15, 0.075)
            game_back_size = (1.75, 1)
            game_back_pos = (-0.1, 0)
            home_back_size = (1.55, 1.15)
            home_back_pos = (0.02, 0)
            warning_back_size = (1.5, 1)
            gameDet_back_size = (1.5, 1)
            pickTest_back_size = (1.5, 1)
            about_back_size = (1.5, 1)
        else: #full screen
            #Size/position of display objects including ship, target boxes and backgrounds
            ship_size = (0.15, 0.15)
            box_size = (0.15, 0.075)
            game_back_size = (2.1, 1.1)
            game_back_pos = (-0.1, 0)
            home_back_size = (1.85, 1.2)
            home_back_pos = (0.023, 0)
            warning_back_size = (1.9, 1)
            gameDet_back_size = (1.9, 1)
            pickTest_back_size = (1.9, 1)
            about_back_size = (1.9, 1)

        #time processing thread sleeps.
        sleep_dur = 0.01
        #Create instance of band collection
        band_collector = collecting_bands.BandCollector(sleep_dur)
        # Start the data collection thread immediately, it will run indefinitely
        threading.Thread(target=band_collector.start_stream).start()
      End Routine:
        #Intialize all buttons to False
        start_exp_button = False
        buttont1 = False
        buttont2 = False
        buttont3 = False
        buttont4 = False
        lose = False
        homeButton = False
        newSession = True #Show main menu when software is first run
        about_exp_button = False
  Routine WarningScreen
    RoutineSettingsComponent WarningScreen
      skipIf = (homeButton == False) and (newSession == False)
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    ImageComponent white_background
      color = 0.6549, 0.6549, 0.6549
      image = white_background.jpeg
      size = warning_back_size
      startVal [time (s)] = 0.0
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    TextComponent welcome_message
      color = black
      font = Garamond
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every frame]:
        This experiment entails the observation of flickering objects. Individuals with a predisposition to epilepsy or other visual sensitivities are advised to exercise caution or to abstain from participation. We cannot assume liability for any discomfort or complications that may ensue.
    ImageComponent caution_sign
      image = warning_sign.png
      pos = (0.6, 0.4)
      size = (0.3, 0.2)
      startVal [time (s)] = 0.0
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    ButtonComponent button
      bold = True
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 2
      color = black
      fillColor = 1.0000, 0.9500, -1.0000
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0, -0.30)
      size = (0.25, 0.125)
      startVal [time (s)] = 0
      text = Click here to proceed
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    TextComponent warning_heading
      color = 0.0902, -1.0000, -1.0000
      letterHeight = 0.09
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = WARNING
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    CodeComponent code_6
      Code Type = Py
      Begin Routine:
        warning_heading.bold = True
      End Routine:
        skip = False #Skip button
  Routine WelcomeScreen
    RoutineSettingsComponent WelcomeScreen
      skipIf = (homeButton == False) and (newSession == False)
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    ImageComponent homepage_image
      image = homepage_1.webp
      pos = home_back_pos
      size = home_back_size
      startVal [time (s)] = 0.0
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    ButtonComponent about_button
      bold = True
      callback = about_exp_button = True
      color = 1.0000, -0.4588, -1.0000
      fillColor = -1.0000, -1.0000, -1.0000
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (-0.5, -0.4)
      size = (0.5, 0.08)
      startVal [time (s)] = 0
      text = Click here to learn more 
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    ButtonComponent start_button
      bold = True
      callback = start_exp_button = True
      color = 1.0000, -0.4588, -1.0000
      fillColor = -1.0000, -1.0000, -1.0000
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.5, -0.4)
      size = (0.5, 0.08)
      startVal [time (s)] = 0
      text = Click here to start game
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    CodeComponent code_7
      Code Type = Py
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      End Routine:
        #Variables to show instructions
        cur_row = 0
        button_pressed = "none"
        show_instructions = 1
        max_slides = 6
  Routine AboutExpScreen
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    ImageComponent image_instruction
      image [set every repeat] = $about_slide
      size = about_back_size
      startVal [time (s)] = 0.0
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    ButtonComponent next_button
      bold = True
      callback = button_pressed = "next"
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.5, -0.4)
      size = (0.2, 0.08)
      startVal [time (s)] = 0
      text = Next >>
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    ButtonComponent back_button
      bold = True
      callback = button_pressed = "back"
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (-0.5, -0.4)
      size = (0.2, 0.08)
      startVal [time (s)] = 0
      text = << Back
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  Routine instructionprep
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    CodeComponent code_2
      Code Type = Py
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      Begin Routine:
        #Skip instructions
        if (about_exp_button == False) :
            instructions_controller.finished = 1
            show_instructions = 0
            cur_row = max_slides

        if(button_pressed == "next"):
            cur_row += 1

        elif (button_pressed == "back"):
            cur_row -= 1

        button_pressed = "none" #Allow buttons to be pressed again

        if (cur_row < 0) :
            cur_row = 0

        #End of instructions
        if (cur_row > max_slides) :
            instructions_controller.finished = 1
            show_instructions = 0
            cur_row = max_slides
  Routine reset_home_button
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  Routine earth_win
    RoutineSettingsComponent earth_win
      skipIf = lose == True or homeButton == True
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    ImageComponent earth_win_2
      image = earth_win.jpeg
      pos = game_back_pos
      size = game_back_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_end
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    TextComponent win_message
      letterHeight = 0.045
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_end
      text = YOU WIN!!! You saved Earth from aliens!!!
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  Routine earth_lose
    RoutineSettingsComponent earth_lose
      skipIf = lose == False or homeButton == True
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    ImageComponent earth_lose_2
      image = Earth_lost.jpeg
      pos = game_back_pos
      size = game_back_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_end
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    TextComponent lose_message
      letterHeight = 0.045
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_end
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      text:
        YOU LOSE!!! Aliens destroyed Earth!!!
        You did not focus on the correct spaceship
  Routine earth_pause_4
    RoutineSettingsComponent earth_pause_4
      skipIf = (buttont4 == False) or (lose == True) or (trials_4.thisN == (trials_4.nReps - 1))
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    ImageComponent earth_blank
      image = earth.jpeg
      pos = game_back_pos
      size = game_back_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_blank
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    TextComponent continue_playing_message
      letterHeight = 0.045
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_blank
      text = Good job but another wave of aliens are coming!
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  Routine earth_pause_3
    RoutineSettingsComponent earth_pause_3
      skipIf = (buttont3 == False) or (lose == True) or (trials_3.thisN == (trials_3.nReps - 1))
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    ImageComponent earth_blank_2
      image = earth.jpeg
      pos = game_back_pos
      size = game_back_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_blank
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    TextComponent continue_playing_message_2
      letterHeight = 0.045
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_blank
      text = Good job but another wave of aliens are coming!
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  Routine earth_pause_2
    RoutineSettingsComponent earth_pause_2
      skipIf = (buttont2 == False) or (lose == True) or (trials_2.thisN == (trials_2.nReps - 1))
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    ImageComponent earth_blank_3
      image = earth.jpeg
      pos = game_back_pos
      size = game_back_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_blank
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    TextComponent continue_playing_message_3
      letterHeight = 0.045
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_blank
      text = Good job but another wave of aliens are coming!
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  Routine earth_pause_1
    RoutineSettingsComponent earth_pause_1
      skipIf = (buttont1 == False) or (lose == True) or (trials_1.thisN == (trials_1.nReps - 1))
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    ImageComponent earth_blank_4
      image = earth.jpeg
      pos = game_back_pos
      size = game_back_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_blank
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    TextComponent continue_playing_message_4
      letterHeight = 0.045
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_blank
      text = Good job but another wave of aliens are coming!
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  Routine GameDet
    RoutineSettingsComponent GameDet
      skipIf = (skip == True) or ((homeButton == False) and (newSession == False))
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    ImageComponent MindBattle
      image = alien_invasion.jpg
      size = gameDet_back_size
      startVal [time (s)] = 0.0
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    TextComponent explanation
      letterHeight = 0.05
      pos = (0, 0.33)
      startVal [time (s)] = 0.0
      text = Aliens are attacking Earth and it's up to you to stop them. Using the power of your mind focus on the RED outlined spaceship to stop its attack. Fail to focus on the target and the aliens will win.
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    ButtonComponent Skip
      bold = True
      borderColor = 1.0000, 1.0000, 1.0000
      borderWidth = 2
      callback = skip = True
      color = 1.0000, 1.0000, 1.0000
      fillColor = -1.0000, -1.0000, -1.0000
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (0, -0.3)
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = Skip
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  Routine before_test2
    RoutineSettingsComponent before_test2
      skipIf = (buttont1 == False) or (lose == True) or (buttont2 == False)
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    ImageComponent earth_blank_5
      image = earth.jpeg
      pos = game_back_pos
      size = game_back_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_blank
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    TextComponent continue_playing_message_5
      letterHeight = 0.045
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_blank
      text = 3 more spaceships are coming get ready!
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  Routine before_test3
    RoutineSettingsComponent before_test3
      skipIf = (buttont1 == False) or (lose == True) or (buttont3 == False)
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    ImageComponent earth_blank_6
      image = earth.jpeg
      pos = game_back_pos
      size = game_back_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_blank
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    TextComponent continue_playing_message_6
      letterHeight = 0.045
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_blank
      text = 4 more spaceships are coming get ready!
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  Routine before_test4
    RoutineSettingsComponent before_test4
      skipIf = (buttont1 == False) or (lose == True) or (buttont4 == False)
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    ImageComponent earth_blank_7
      image = earth.jpeg
      pos = game_back_pos
      size = game_back_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_blank
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    TextComponent continue_playing_message_7
      letterHeight = 0.045
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = dur_blank
      text = ALL the remaining spaceships are coming get ready!
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Flow
  Routine GlobalFunctions
  LoopInitiator return_to_homepage loopType="TrialHandler"
    loopType = sequential
    nReps = 100
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    Routine WelcomeScreen
    LoopInitiator instructions_controller loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = 9999
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      Routine instructionprep
      LoopInitiator about_slide_loop loopType="TrialHandler"
        Selected rows = $str(cur_row)
        conditionsFile = slide_order.xlsx
        isTrials = False
        loopType = random
        nReps = show_instructions
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        conditions:
          [{'about_slide': 'about/Slide1.jpeg'},
          {'about_slide': 'about/Slide2.jpeg'},
          {'about_slide': 'about/Slide3.jpeg'},
          {'about_slide': 'about/Slide4.jpeg'},
          {'about_slide': 'about/Slide5.jpeg'},
          {'about_slide': 'about/Slide6.jpeg'},
          {'about_slide': 'about/Slide7.jpeg'}]
        Routine AboutExpScreen
      LoopTerminator about_slide_loop
    LoopTerminator instructions_controller
    Routine WarningScreen
    Routine GameDet
    Routine PickTest
    LoopInitiator trials_1 loopType="TrialHandler"
      loopType = sequential
      nReps = trial_num1
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      LoopInitiator repetition_1 loopType="TrialHandler"
        loopType = sequential
        nReps = rep_num1
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        Routine test_1
        Routine earth_pause_1
      LoopTerminator repetition_1
    LoopTerminator trials_1
    Routine before_test2
    LoopInitiator trials_2 loopType="TrialHandler"
      loopType = sequential
      nReps = trial_num2
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      LoopInitiator repetition_2 loopType="TrialHandler"
        loopType = sequential
        nReps = rep_num2
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        Routine test_2
        Routine earth_pause_2
      LoopTerminator repetition_2
    LoopTerminator trials_2
    Routine before_test3
    LoopInitiator trials_3 loopType="TrialHandler"
      loopType = sequential
      nReps = trial_num3
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      LoopInitiator repetition_3 loopType="TrialHandler"
        loopType = random
        nReps = rep_num3
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        Routine test_3
        Routine earth_pause_3
      LoopTerminator repetition_3
    LoopTerminator trials_3
    Routine before_test4
    LoopInitiator trials_4 loopType="TrialHandler"
      loopType = sequential
      nReps = trial_num4
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      LoopInitiator repetition_4 loopType="TrialHandler"
        loopType = sequential
        nReps = rep_num4
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        Routine test_4
        Routine earth_pause_4
      LoopTerminator repetition_4
    LoopTerminator trials_4
    Routine earth_win
    Routine earth_lose
    Routine reset_buttons
  LoopTerminator return_to_homepage
  Routine GoodBye
